MATLABInstrumentDriver
FileVersion: 2.42
DriverName: C:\Users\Cliona\OneDrive\Documents\Pico MATLAB Code\picosdk_psospa-matlab-instrument-driver-master\picotech_psospa_generic.mdd
DriverType: MATLAB generic
InstrumentType: Oscilloscope
InstrumentManufacturer: Pico Technology Ltd.
InstrumentModel: PicoScope 3000E Series
InstrumentVersion: 1.0

CreateInitCode
  Code:
    function init(obj)
    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
    % Copyright © 2024 Pico Technology Ltd.  All rights reserved.
    % You may copy and distribute this file as long as it remains unmodified.
    % SB

        fprintf('PicoScope 3000E Series (A API) MATLAB Instrument Driver');
        fprintf('\n');
        fprintf('\nCopyright © 2024 Pico Technology Ltd.  All rights reserved. \n')
        fprintf('\n');

        % Load libraries
        % ==============

        % Only load library once

        if (libisloaded('psospa'))

               % do nothing

        else

            if (ismac())

                [psospaNotFound, psospaWarnings] = loadlibrary('libpsospa.dylib', @psospaMFile, 'alias', 'psospa');

            elseif (isunix())

                [psospaNotFound, psospaWarnings] = loadlibrary('libpsospa.so', @psospaMFile, 'alias', 'psospa');

            elseif (ispc())

                [psospaNotFound, psospaWarnings] = loadlibrary('psospa.dll', @psospaMFile);

            else

                % do nothing

            end

        end

        % Load in enums and structures

        [~, obj.DriverData.structs, obj.DriverData.enums, ~] = psospaMFile();

ConnectInitCode
  Code:
    function init(obj)
    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
    % Copyright © 2024 Pico Technology Ltd. All rights reserved.
    % You may copy and distribute this file as long as it remains unmodified.
    % SB

        disp('Opening PicoScope 3000E Series (A API) device');

        % Structure to hold satus values while connecting.
        connectStatus = [];

        % Temporary variable to store handle value
        unitHandle = 0;

    	%Temporary variable for Power details
        powerDetails = struct;

        picoOK = PicoStatus.PICO_OK;

        % Obtain serial number input
        serialNum = get(obj, 'RsrcName');

        % determine if serial number given
        if length(serialNum) > 0

            unitSerial = serialNum;

        else

            unitSerial = [];

        end

        % Open with 8 bit resolution
        resolution8bit = obj.DriverData.enums.enPicoDeviceResolution.PICO_DR_8BIT;
        obj.DriverData.resolution = resolution8bit;

        [connectStatus.openUnit, obj.DriverData.unitHandle, ~] = ...
            calllib('psospa','psospaOpenUnit',unitHandle, unitSerial,resolution8bit, powerDetails);

        % Validate handle
        if (obj.DriverData.unitHandle > 0)

            unithandle = obj.DriverData.unitHandle;
    %
            % Set serial
            infoLine = blanks(40);
            reqSize = length(infoLine);

    %         [connectStatus.unitSerial, obj.DriverData.unitSerial, reSize] = ...
    %             calllib('psospa','psospaGetUnitInfo',unitHandle,infoLine, ...
    %             length(infoLine),reqSize,PicoStatus.PICO_BATCH_AND_SERIAL);
    %
    %         % Set variant
            infoLineV = blanks(15);
            reqSizeV = 15;
    %
    %         [connectStatus.unitVariant, variant, ~] = calllib('psospa', ...
    %             'psospaGetUnitInfo', unitHandle, infoLineV, length(infoLineV),...
    %             reqSizeV, PicoStatus.PICO_VARIANT_INFO);
    %
    %         set(obj, 'InstrumentModel', variant);
    %
    %         % Set channel count
    %         obj.DriverData.channelCount = str2num(obj.InstrumentModel(2));
    %
        elseif (connectStatus.openUnit == PicoStatus.PICO_NOT_FOUND)

            error('No unit found, please check connections.');

        else

            error('Status code: %d\n', connectStatus.openUnit);

        end

CleanupCode
  Code:
    function cleanup(obj)
    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
        if (isfield(obj.DriverData, 'unitHandle'))

            unitHandle = obj.DriverData.unitHandle;

            if (isempty(unitHandle))
                return;
            end

            if (~libisloaded('psospa'))

                return

            end

            % Close scope

            disconnectStatus = calllib('psospa','psospaCloseUnit', unitHandle);

            if (disconnectStatus == PicoStatus.PICO_OK)

                fprintf(['PicoScope closed successfully.\n']);

            elseif (disconnectStatus == PicoStatus.PICO_INVALID_HANDLE)

                return

            else

    %             if (isfield(obj.DriverData, 'unitSerial'))
    %
    %                 error('Disconnect: ConnectionNotClosed',...
    %                     ['Connection to PicoScope not closed. Status code %d\n']...
    %                     ,disconnectStatus);
    %
    %             end

            end

    %         % unload libraries if no other scopes are connected
    %
    %         firestHandle = 0;
    %
    %         if (ispc())
    %
    %             firstHandle = 16384; % Windows PC
    %
    %         else

        else
            warning('Disconnect:NoDevicesFound', 'Disconnect: No devices found.');
        end
    %
    %             firstHandle = 1; % Mac and Linux
    %
    %         end
    %
    %         % test connection to other handles
    %         lastHandle = firstHandle + 63 % obj.DriverData.constants.PICO_MAX_UNITS

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property channelCount
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property resolution
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property unitHandle
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property unitSerial
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Method psospaChannelCombinationsStateless
    MCode:
      function status = psospaChannelCombinationsStateless(obj,channelFlagsCombinations,nChannelCombinations,resolution,timebase)
      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
          status = calllib('psospa','psospaChannelCombinationsStateless',obj.DriverData.unitHandle,...
              channelFlagsCombinations,nChannelCombinations,resolution,timebase);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaChannelCombinationsStateless: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaEnumerateUnits
    MCode:
      function status = psospaEnumerateUnits(obj, count, serials, serialLth)
      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
          status = calllib('psospa','psospaEnumerateUnits',count,serials,serialLth);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaEnumerateUnits: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaFlashLed
    MCode:
      function status = psospaFlashLed(obj, start)
      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
          status = calllib('psospa','psospaFlashLed',obj.DriverData.unitHandle, start);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaFlashLed: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaGetAdcLimits
    MCode:
      function status = psospaGetAdcLimits(obj, resolution, minValue, maxValue)
      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
          status = calllib('psospa','psospaGetAdcLimits', obj.DriverData.unitHandle, resolution, minValue, maxValue);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaGetAdcLimits: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaGetAnalogueOffsetLimits
    MCode:
      function status = psospaGetAnalogueOffsetLimits(obj,range,coupling,maximumVoltage,minimimVoltage)
      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
          status = calllib('psospa','psospaGetAnalogueOffsetLimits',obj.DriverData.unitHandle,range,coupling,...
              maximumVoltage,minimumVoltage);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaGetAnalogueOffsetLimits: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaGetDeviceResolution
    MCode:
      function status = psospaGetDeviceResolution(obj,resolution)
      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
          status = calllib('psospa','psospaGetDevieResolution',obj.DriverData.unitHandle,resolution);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaGetDeviceResolution: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaGetMaximumAvailableMemory
    MCode:
      function status = psospaGetMaximumAvailableMemory(obj, nMaxSamples, resolution)
      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
          status = calllib('psospa','psospaGetMaximumAvailableMemory',obj.DriverData.unitHandle, nMaxSamples,resolution);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaGetMaximumAvailableMemory: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaGetMinimumTimebaseStateless
    MCode:
      function status = psospaGetMinimumTimebaseStateless(obj, enabledChannelFlags, timebase, timeInterval, resolution)
      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
              status = calllib('psospa','psospaGetMinimumTimebaseStateless', obj.DriverData.unitHandle, enabledChannelFlags,...
              timebase, timeInterval, resolution);

              if (status == PicoStatus.PICO_OK)

              else

                  error('psospaGetMinimumTimebaseStateless: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

              end

  Method psospaGetNoOfCaptures
    MCode:
      function status = psospaGetNoOfCaptures(obj,nCaptures)
      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
          status = calllib('psospa','psospaGetNoOfCaptures',obj.DriverData.unitHandle,nCaptures);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaGetNoOfCaptures: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaGetNoOfProcessedCaptures
    MCode:
      function status = psospaGetNoOfProcessedCaptures(obj,nProcessedCaptures)
      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
          status = calllib('psospa','psospaGetNoOfProcessedCaptures',obj.DriverData.unitHandle,nProcessedCaptures);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaGetNoOfProcessedCaptures: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaGetScalingValues
    MCode:
      function status = psospaGetScalingValues(obj,scalingValues,nChannels)
      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
          status = calllib('psospa','psospaGetScalingValues',obj.DriverData.unitHandle,scalingValues,nChannels);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaGetScalingValues: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaGetStreamingLatestValues
    MCode:
      function status = psospaGetStreamingLatestValues(obj, streamingDataInfo, nStreamingDataInfos, triggerInfo)
      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
          status = calllib('psospa','psospaGetStreamingLatestValues',obj.DriverData.unitHandle,...
              streamingDataInfo, nStreamingDataInfos, triggerInfo);

  Method psospaGetTimebase
    MCode:
      function status = psospaGetTimebase(obj,timebase, noSamples, timeIntervalNanoseconds, maxSamples, segmentIndex)
      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
          status = calllib('psospa','psospaGetTimebase',obj.DriverData.unitHandle, timebase, noSamples,...
              timeIntervalNanoseconds, maxSamples,segmentIndex);

  Method psospaGetTriggerInfo
    MCode:
      function status = psospaGetTriggerInfo(obj,triggerInfo,firstSegmentIndex,segmentCount)
      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
          status = calllib('psospa','psospaGetTriggerInfo',obj.DriverData.unitHandle,triggerInfo,firstSegmentIndex,...
              segmentCount);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaGetTriggerInfo: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaGetTriggerTimeOffset
    MCode:
      function status = psospaGetTriggerTimeOffset(obj,time,timeUnits,segmentIndex)
      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
          status = calllib('psospa','psospaGetTriggerTimeOffset',obj.DriverData.unitHandle,time,timeUnits,...
              segmentIndex);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaGetTriggerTimeOffset: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaGetUnitInfo
    MCode:
      function status = psospaGetUnitInfo(obj, string, stringLength, requiredSize, info)
      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
          status = calllib('psospa','psospaGetUnitInfo',obj.DriverData.unitHandle, string, stringLength, requiredSize, info);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaGetUnitInfo: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaGetValues
    MCode:
      function status = psospaGetValues(obj, startIndex, noOfSamples, downSampleRatio, downSampleRatioMode, segmentIndex, overflow)
      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

          [status] = calllib('psospa','psospaGetValues',obj.DriverData.unitHandle,...
              startIndex, noOfSamples, downSampleRatio, downSampleRatioMode, segmentIndex, overflow);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaGetValues: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaGetValuesAsync
    MCode:
      function status = psospaGetValuesAsync(obj,startIndex,noOfSamples,downSampleRatio,downSampleRatioMode,segmentIndex,...
          lpDataReady,pParameter)
      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
          status = calllib('psospa','psospaGetValuesAsync',obj.DriverData.unitHandle,startIndex,noOfSamples,...
              downSampleRatio,downSampleRatioMode,segmentIndex,lpDataReady,pParameter);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaGetValuesAsync: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaGetValuesBulk
    MCode:
      function status = psospaGetValuesBulk(obj, startIndex, noOfSamples, fromSegmentIndex, toSegmentIndex, downSampleRatio, downSampleRatioMode, overflow)

      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
          status = calllib('psospa', 'psospaGetValuesBulk', obj.DriverData.unitHandle, startIndex, noOfSamples,...
              fromSegmentIndex, toSegmentIndex, downSampleRatio, downSampleRatioMode, overflow);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaGetValuesBulk: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaGetValuesBulkAsync
    MCode:
      function status = psospaGetValuesBulkAsync(obj,startIndex,noOfSamples,fromSegmentIndex,toSegmentIndex,downSampleRatio,...
          downSampleRatioMode,lpDataReady,pParameter)
      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
          status = calllib('psospa','psospaGetValuesBulkAsync',obj.DriverData.unitHandle,startIndex,noOfSamples,...
              fromSegmentIndex,toSegmentIndex,downSampleRatio,downSampleRatioMode,lpDataReady,pParameter);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaGetValuesBulkAsync: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaGetValuesOverlapped
    MCode:
      function status = psospaGetValuesOverlapped(obj,startIndex,noOfSamples,downSampleRatio,downSampleRatioMode,...
          fromSegmentIndex,toSegmentIndex,overflow)
      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
          status = calllib('psospa','psospaGetValuesOverlapped',obj.DriverData.unitHandle,startIndex,noOfSamples,...
              downSampleRatio,downSampleRatioMode,fromSegmentIndex,toSegmentIndex,overflow);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaGetValuesOverlapped: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaGetValuesTriggerTimeOffsetBulk
    MCode:
      function status = psospaGetValuesTriggerTimeOffsetBulk(obj,time,timeUnits,fromSegmentIndex,toSegmentIndex)
      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
          status = calllib('psospa','psospaGetValuesTriggerTimeOffsetBulk',obj.DriverData.unitHandle,time,...
              timeUnits,fromSegmentIndex,toSegmentIndex);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaGetValuesTriggerTimeOffsetBulk: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaIsReady
    MCode:
      function status = psospaIsReady(obj, ready)
      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
          status = calllib('psospa','psospaIsReady',obj.DriverData.unitHandle,ready);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaGetMinimumTimebaseStateless: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaMemorySegments
    MCode:
      function status = psospaMemorySegments(obj, nSegments, nMaxSamples)
      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
          status = calllib('psospa', 'psospaMemorySegments', obj.DriverData.unitHandle, nSegments, nMaxSamples);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaMemorySegments: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaMemorySegmentsBySamples
    MCode:
      function status = psospaMemorySegmentsBySamples(obj, nSamples, nMaxSegments)
      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
          status = calllib('psospa', 'psospaMemorySegmentsBySamples', obj.DriverData.unitHandle, nSamples, nMaxSegments);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaMemorySegmentsBySamples: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaNearestSampleIntervalStateless
    MCode:
      function status = psospaNearestSampleIntervalStateless(obj,enabledChannelFlags,timeIntervalRequested,roundFaster,resolution,timebase,timeIntervalAvailable)
      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
          status = calllib('psospa','psospaNearestSampleIntervalStateless',obj.DriverData.unitHandle,enabledChannelFlags,...
              timeIntervalRequested,roundFaster,resolution,timebase,timeIntervalAvailable);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaNearestSampleIntervalStateless: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaNoOfStreamingValues
    MCode:
      function status = psospaNoOfStreamingValues(obj,noOfValues)
      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
          status = calllib('psospa','psospaNoOfStreamingValues',obj.DriverData.unitHandle,noOfValues);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaNoOfStreamingValues: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaPingUnit
    MCode:
      function status = psospaPingUnit(obj)
      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
          status = calllib('psospa','psospaPingUnit',obj.DriverData.unitHandle);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaPingUnit: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaQueryMaxSegmentsBySamples
    MCode:
      function status = psospaQueryMaxSegmentsBySamples(obj, nSamples, nChannelsEnabled, nMaxSegments, resolution)
      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
          status = calllib('psospa','psospaQueryMaxSegmentsBySamples',obj.DriverData.unitHandle, nSamples, nChannelsEnabled,...
              nMaxSegments, resolution);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaQueryMaxSegmentsBySamples: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaQueryOutputEdgeDetect
    MCode:
      function status = psospaQueryOutputEdgeDetect(obj, state)
      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
          status = calllib('psospa','psospaQueryOutputEdgeDetect',obj.DriverData.unitHandle,state);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaQueryOutputEdgeDetect: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaRunBlock
    MCode:
      function status = psospaRunBlock(obj, noOfPreTriggerSamples, noOfPostTriggerSamples, timebase,timeIndisposedMs, segmentIndex)
      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
      % no inputs for lpReady or pParameter as these are for callbacks that aren't
      % used

          lpReady = [];
          pParameter = [];

          status = calllib('psospa','psospaRunBlock',obj.DriverData.unitHandle, noOfPreTriggerSamples,...
              noOfPostTriggerSamples, timebase, timeIndisposedMs, segmentIndex, lpReady, pParameter);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaRunBlock: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaRunStreaming
    MCode:
      function status = psospaRunStreaming(obj, sampleInterval, sampleIntervalTimeUnits, maxPreTriggerSamples, maxPostTriggerSamples, autoStop, downSampleRatio, downSampleRatioMode)
      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
          status = calllib('psospa', 'psospaRunStreaming', obj.DriverData.unitHandle, sampleInterval,...
              sampleIntervalTimeUnits, maxPreTriggerSamples, maxPostTriggerSamples, autoStop,...
              downSampleRatio, downSampleRatioMode);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaRunStreaming: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaSetChannelOff
    MCode:
      function status = psospaSetChannelOff(obj, channel)
      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
          status = calllib('psospa','psospaSetChannelOff', obj.DriverData.unitHandle, channel);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaSetChannelOff: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaSetChannelOn
    MCode:
      function status = psospaSetChannelOn(obj, channel, coupling, rangeMin, rangeMax, rangeType, analogueOffset, bandwidth)
      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
          status = calllib('psospa', 'psospaSetChannelOn', obj.DriverData.unitHandle,...
              channel, coupling, rangeMin, rangeMax, rangeType, analogueOffset, bandwidth);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaSetChannelOn: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaSetDataBuffer
    MCode:
      function status = psospaSetDataBuffer(obj, channel, buffer, nSamples, dataType, waveform, downSampleRatioMode, action)
      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

          status = calllib('psospa','psospaSetDataBuffer', obj.DriverData.unitHandle,channel, buffer, nSamples,...
              dataType, waveform, downSampleRatioMode, action);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaSetDataBuffer: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaSetDataBuffers
    MCode:
      function status = psospaSetDataBuffers(obj, channel, bufferMax, bufferMin, nSamples, dataType, waveform, downSampleRatioMode, action)
      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
          status = calllib('psospa', 'psospaSetDataBuffers', obj.DriverData.unitHandle, channel, bufferMax,...
              bufferMin, nSamples, dataType, waveform, downSampleRatioMode, action);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaSetDataBuffers: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaSetDeviceResolution
    MCode:
      function status = psospaSetDeviceResolution(obj, resolution)
      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
          status = calllib('psospa','psospaSetDeviceResolution',obj.DriverData.unitHandle, resolution);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaSetDeviceResolution: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

          obj.DriverData.resolution = resolution;

  Method psospaSetDigitalPortOff
    MCode:
      function status = psospaSetDigitalPortOff(obj, port)
      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

          status = calllib('psospa', 'psospaSetDigitalPortOff', obj.DriverData.unitHandle, port)

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaSetDigitalPortOff: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaSetDigitalPortOn
    MCode:
      function status = psospaSetDigitalPortOn(obj, port, logicThresholdLevel, logicThresholdLevelLength, hysteresis)
      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
          status = calllib('psospa','psospaSetDigitalPortOn', obj.DriverData.unitHandle, port,...
              logicThresholdLevel, logicThresholdLevelLength, hysteresis);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaSetDigitalPortOn: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaSetNoOfCaptures
    MCode:
      function status = psospaSetNoOfCaptures(obj,nCaptures)
      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
          status = calllib('psospa','psospaSetNoOfCaptures',obj.DriverData.unitHandle,nCaptures);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaSetNoOfCaptures: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaSetOutputEdgeDetect
    MCode:
      function status = psospaSetOutputEdgeDetect(obj,state)
      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
          status = calllib('psospa','psospaSetOutputEdgeDetect',obj.DriverData.unitHandle,state);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaSetOutputEdgeDetect: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaSetPulseWidthDigitalPortProperties
    MCode:
      function status = psospaSetPulseWidthDigitalPortProperties(obj,port,directions,nDirections)
      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
          status = calllib('psospa','psospaSetPulseWidthDigitalPortProperties',obj.DriverData.unitHandle,...
              port,directions,nDirections);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaSetPulseWidthDigitalPortProperties: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaSetPulseWidthQualifierConditions
    MCode:
      function status = psospaSetPulseWidthQualifierConditions(obj, conditions,nConditions,action)
      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
          status = calllib('psospa','psospaSetPulseWidthQualifierConditions',obj.DriverData.unitHandle,...
              conditions,nConditions,action);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaSetPulseWidthQualifierConditions: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaSetPulseWidthQualifierDirections
    MCode:
      function status = psospaSetPulseWidthQualifierDirections(obj,directions,nDirections)
      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
          status = calllib('psospa','psospaSetPulseWidthQualifierDirections',obj.DriverData.unitHandle,directions,...
              nDirections);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaSetPulseWidthQualifierDirections: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaSetPulseWidthQualifierProperties
    MCode:
      function status = psospaSetPulseWidthQualifierProperties(obj,lower,upper,type)
      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
          status = calllib('psospa','psospaSetPulseWidthQualifierProperties',obj.DriverData.unitHandle,...
              lower,upper,type);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaSetPulseWidthQualifierProperties: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaSetSimpleTrigger
    MCode:
      function status = psospaSetSimpleTrigger(obj, enable, source, threshold, direction, delay, autoTriggerMicroSeconds)
      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
          status = calllib('psospa','psospaSetSimpleTrigger', obj.DriverData.unitHandle, enable, source,...
              threshold, direction, delay, autoTriggerMicroSeconds);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaSetSimpleTrigger: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaSetTriggerChannelConditions
    MCode:
      function status = psospaSetTriggerChannelConditions(obj,conditions,nConditions,action)
      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
          status = calllib('psospa','psospaSetTriggerChannelConditions',obj.DriverData.unitHandle,conditions,...
              nConditions,action);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaSetTriggerChannelConditions: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaSetTriggerChannelDirections
    MCode:
      function status = psospaSetTriggerChannelDirections(obj,directions,nDirections)
      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
          status = calllib('psospa','psospaSetTriggerChannelDirections',obj.DriverData.unitHandle,directions,...
              nDirections);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaSetTriggerChannelDirections: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaSetTriggerChannelProperties
    MCode:
      function status = psospaSetTriggerChannelProperties(obj,channelProperties,nChannelProperties,auxOutputEnable,autoTriggerMicroSeconds)
      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
          status = calllib('psospa','psospaSetTriggerChannelProperties',obj.DriverData.unitHandle,channelProperties,...
              nChannelProperties,auxOutputEnable,autoTriggerMicroSeconds);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaSetTriggerChannelProperties: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaSetTriggerDelay
    MCode:
      function status = psospaSetTriggerDelay(obj,delay)
      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
          status = calllib('psospa','psospaSetTriggerDelay',obj.DriverData.unitHandle,delay);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaSetTriggerDelay: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaSetTriggerDigitalPortProperties
    MCode:
      function status = psospaSetTriggerDigitalPortProperties(obj,port,directions,nDirections)
      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
          status = calllib('psospa','psospaSetTriggerDigitalPortProperties',obj.DriverData.unitHandle,port,...
              directions,nDirections);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaSetTriggerDigitalPortProperties: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaSigGenApply
    MCode:
      function status = psospaSigGenApply(obj,sigGenEnabled,sweepEnabled,triggerEnabled,pFrequency,pStopFrequency,pFrequencyIncrement,pDwellTime)
      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
          status = calllib('psospa','psospaSigGenApply',obj.DriverData.unitHandle,sigGenEnabled,sweepEnabled,triggerEnabled,pFrequency,pStopFrequency,pFrequencyIncrement,pDwellTime);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaSigGenApply: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaSigGenClockManual
    MCode:
      function status = psospaSigGenClockManual(obj,dacClockFrequency,prescaleRatio)
      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
          status = calllib('psospa','psospaSigGenClockManual',obj,DriverData.unitHandle,dacClockFrequency,prescaleRatio);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaSigGenClockManual: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaSigGenFilter
    MCode:
      function status = psospaSigGenFilter(obj,filterState)
      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
          status = calllib('psospa','psospaSigGenFilter',obj.DriverData.unitHandle,filterState);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaSigGenFilter: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaSigGenFrequency
    MCode:
      function status = psospaSigGenFrequency(obj,frequencyHz)
      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
          status = calllib('psospa','psospaSigGenFrequency',obj.DriverData.unitHandle,frequencyHz);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaSigGenFrequency: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaSigGenFrequencyLimits
    MCode:
      function status = psospaSigGenFrequencyLimits(obj,waveType,numSamples,startFrequency,sweepEnabled,manualDacClockFrequency,...
          manualPrescaleRatio,maxStopFrequencyOut,minFrequencyStepOut,maxFrequencyStepOut,minDwellTimeOut,maxDwellTimeOut)
      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
          status = calllib('psospa','psospaSigGenFrequencyLimits',obj.DriverData.unitHandle,waveType,numSamples,startFrequency,...
              sweepFrequency,sweepEnabled,manualDacClockFrequency,manualPrescaleRatio,maxStopFrequencyOut,...
              minFrequencyStepOut,maxFrequencyStepOut,minDwellTimeOut,maxDwellTimeOut);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaSigGenFrequencyLimits: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaSigGenFrequencySweep
    MCode:
      function status = psospaSigGenFrequencySweep(obj,stopFrequencyHz,frequencyIncrement,dwellTimeSeconds,sweepType)
      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
          status = calllib('psospa','psospaSigGenFrequencySweep',obj.DriverData.unitHandle,stopFrequencyHz,...
              frequencyIncrement,dwellTimeSeconds,sweepType);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaSigGenFrequencySweep: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaSigGenLimits
    MCode:
      function status = psospaSigGenLimits(obj,parameter,minimumPermissibleValue,maximumPermissibleValue,step)
      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
          status = calllib('psospa','psospaSigGenLimits',obj.DriverData.unitHandle,parameter,minimumPermissibleValue,...
              maximumPermissibleValue, step);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaSigGenLimits: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaSigGenPause
    MCode:
      function status = psospaSigGenPause(obj)
      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
          status = calllib('psospa','psospaSigGenPause',obj.DriverData.unitHandle);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaSigGenPause: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaSigGenPhase
    MCode:
      function status = psospaSigGenPhase(obj,deltaPhase)
      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
          status = calllib('psospa','psospaSigGenPhase',obj.DriverData.unitHandle,deltaPhase);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaSigGenPhase: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaSigGenPhaseSweep
    MCode:
      function status = psospaSigGenPhaseSweep(obj,stopDeltaPhase,deltaPhaseIncrement,swellCount,sweepType)
      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
          status = calllib('psospa','psospaSigGenPhaseSweep',obj.DriverData.unitHandle,stopDeltaPhase,...
              deltaPhaseIncrement,swellCount,sweepType);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaSigGenPhaseSweep: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaSigGenRange
    MCode:
      function status = psospaSigGenRange(obj,peakToPeakVolts,offsetVolts)
      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
          status = calllib('psospa','psospaSigGenRange',obj.DriverData.unitHandle,peakToPeakVolts,offsetVolts);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaSigGenRange: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaSigGenRestart
    MCode:
      function status = psospaSigGenRestart(obj)
      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
          status = calllib('psospa','psospaSigGenRestart',obj.DriverData.unitHandle);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaSigGenRestart: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaSigGenSoftwareTriggerControl
    MCode:
      function status = psospaSigGenSoftwareTriggerControl(obj,triggerState)
      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
          status = calllib('psospa','psospaSigGenSoftwareTriggerControl',obj.DriverData.unitHandle,triggerState);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaSigGenSoftwareTriggerControl: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaSigGenTrigger
    MCode:
      function status = psospaSigGenTrigger(obj,triggerType,triggerSource,cycles,autoTriggerPicoSeconds)
      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
          status = calllib('psospa','psospaSigGenTrigger',obj.DriverData.unitHandle,triggerType,triggerSource,...
              cycles,autoTriggerPicoSeconds);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaSigGenTrigger: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaSigGenWaveform
    MCode:
      function status = psospaSigGenWaveform(obj, wavetype, buffer, bufferLength)
      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
          status = calllib('psospa','psospaSigGenWaveform',obj.DriverData.unitHandle,wavetype,buffer,bufferLength);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaSigGenWaveform: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaSigGenWaveformDutyCycle
    MCode:
      function status = psospaSigGenWaveformDutyCycle(obj,dutyCyclePercent)
      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
          status = calllib('psospa','psospaSigGenWaveformDutyCycle',obj.DriverData.unitHandle,dutyCyclePercent)

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaSigGenWaveformDutyCycle: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaStop
    MCode:
      function status = psospaStop(obj)
      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
          status = calllib('psospa','psospaStop',obj.DriverData.unitHandle);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaStop: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaStopUsingGetValuesOverlapped
    MCode:
      function status = psospaStopUsingGetValuesOverlapped(obj)
      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
          status = calllib('psospa','psospaStopUsingGetValuesOverlapped',obj.DriverData.unitHandle);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaStopUsingGetValuesOverlapped: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end

  Method psospaTriggerWithinPreTriggerSamples
    MCode:
      function status = psospaTriggerWithinPreTriggerSamples(obj,state)
      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
          status = calllib('psospa','psospaTriggerWithinPreTriggerSamples',obj.DriverData.unitHandle,state);

          if (status == PicoStatus.PICO_OK)

          else

              error('psospaTriggerWithinPreTriggerSamples: status code %d, please refer to the PicoStatus.m file.', dec2hex(status));

          end
